PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Data filename = u'data/%s_%s/%s/%s_%s_%s' % (expInfo['participant'], data.getDateStr(format="%Y-%m-%d"), 'calibration', expInfo['participant'], expName, expInfo['date'] )
  Experiment info = {'participant': 'sub-000', 'debug': '0', 'fail_ma': '750', 'max_ma': '700', 'nramps': '3'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = painf_calibration
  keyboardBackend = ioHub
  logging level = error
  runMode = 0
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Routines
  Routine Welcome
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    TextComponent textwelcome
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Bienvenue dans le programme de calibration.

        Veuillez vous assurer que le stimulateur est bien branché et ouvert.


        Une fois les vérifications faites, appuyez sur "p".
    KeyboardComponent key_resp
      allowedKeys = 'p'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent init_shock
      Code Type = Py
      Before Experiment:
        from psychopy.hardware import keyboard
        import numpy as np
      Begin Experiment:
        # Init keyboard for rating scale
        debug = int(expInfo['debug'])
        import serial
        import time
        import ds8r
        import numpy as np
        kb = keyboard.Keyboard()


        # Initialize shock

        # intensities range from 1 to max_mA
        shock_intensities = list(np.arange(10, float(expInfo['max_ma'])+1, 10))
        ramp_n_reps = len(shock_intensities)



        # Check connection with shocks. If no crash, should be ok
        results = []
        dgt, dgc = ds8r.init()
        dgc['enabled'] = 0
        for i in range(5):
            for j in range(100, 700, 10):
                lib, _ = ds8r.init()
                dgc['demand'] = j
                result = ds8r.set_ds8r_safe(dgt, dgc)
                results.append(result)

        fail_ma = float(expInfo['fail_ma'])
        dgt, dgc = ds8r.init()
        dgc['demand'] = 9
        dgc['enabled'] = 1
        dgc['pulsewidth'] = 2000


        ds8r.set_d128(dgt, dgc)
        adress = 'COM9'
        def init_port(adress):
            port = serial.Serial(adress, baudrate=9600)
            time.sleep(1) # Wait to make sure it's open
            return port
        port = init_port(adress)
        port.write([0x00])
      Begin Routine:
        win.mouseVisible = False
  Routine Instructions
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  Routine press_when_ready
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Si vous pensez être capable de tolérer la prochaine stimulation, dites à l’expérimentatrice de continuer.


        Si vous ne pensez pas être capable de tolérer la prochaine stimulation, dites à l’expérimentatrice d’arrêter ici.
    KeyboardComponent key_resp_3
      allowedKeys = 'y', 'n'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Py
      Begin Experiment:
        series_trial = []
        ramp_trial = []
        intensities_list = []
        ratings_list = []
        fired_list = []
      End Routine:
        series_trial.append(series.thisN)
        ramp_trial.append(Ramp.thisN)
        intensities_list.append(intensity)
        fired_list.append(fired)
        ratings_list.append(ratingScale.getRating())



        # QUit if q pressed
        if 'n' in key_resp_3.keys :
                Ramp.finished = 1
  Routine wait
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $wait1jitter
      text [set every repeat] = $wait_text
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  Routine wait2
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    TextComponent text_4
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine press_when_ready2
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    TextComponent text_9
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Appuyer sur le bouton pour la prochaine stimulation.
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    KeyboardComponent key_resp_7
      allowedKeys = 'p'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_2
      Code Type = Py
      Begin Experiment:
        ratings_random = []
        intensities_random = []
        wasmoved_random = []
      Begin Routine:
        # Jitter waiting
        ramp_phase = 0
        wait1jitter = np.random.choice([3000])
        # in secs
        wait1jitter = wait1jitter/1000

        # Log intensity
        rand_shocks.addData('wait1_dur', wait1jitter)


        # Get the intensity
        intensity = rand_intensities[rand_shocks.thisN]
        dgc['demand'] = intensity


        assert intensity < float(expInfo['fail_ma'])

        # Get the intensity
        assert dgc['demand'] < int(expInfo['fail_ma'])

        # Set shock
        lib, _ = ds8r.init()
        result = ds8r.set_ds8r_safe(lib, dgc)

        # Log intensity
        rand_shocks.addData('intensity', intensity)


        if debug:
            wait_text = 'DEBUG: A shock of ' + str(intensity) + ' mA would be delivered'
        else:
            wait_text = ''
  Routine wait2_2
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  Routine instructions_random
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    TextComponent text_8
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Deuxième phase.

        Dans la seconde phase, vous allez recevoir des stimulations d’intensité aléatoire sous votre niveau de tolérance et vous devrez évaluer la douleur ressentie après chaque choc.

        Appuyer sur la touche spéciale pour débuter.
    KeyboardComponent key_resp_6
      allowedKeys = 'p'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instructions_start_ramp
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    TextComponent text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Prêt à commencer une série de stimulations.

        Expérimentateur :
        Assurez-vous que le stimulateur est connecté.

        Appuyer sur la touche spéciale pour commencer.
    KeyboardComponent key_resp_2
      allowedKeys = 'p'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine thank_you_outputcode
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    TextComponent text_11
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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      text:
        Terminé!
    CodeComponent choose_stim
      Code Type = Py
      End Routine:
        import numpy as np
        import matplotlib.pyplot as plt
        import pandas as pd
        from scipy.optimize import minimize

        xdata = [i/10 for i in intensities_random]

        target_rating = [0.3, 0.7]
        target_rating = [c*100 for c in target_rating]
        ratings_random = [(c/np.max(ratings_random))*100 for c in ratings_random]
        ydata = ratings_random
        intensities = np.arange(threshold, tolerance+5, 5)/10

        rate_data = pd.DataFrame()
        rate_data['ydata'] = ydata
        rate_data['xdata'] = xdata

        def fit_model(func_type, params, levels):
            return {
                #Scale down by 0.1 to prevent overflow error
                "linear" : params[0] + params[1] * levels,
                "hyper"  : params[0] + params[1]/(params[2] + levels),
                "para"   : params[0] + params[1] * levels + params[2] * (levels**2),
                "expo"   : params[0] + params[1]*(levels**params[2])
                }[func_type]

        def get_model_sse(params, rate_data, func):

            # mean center to remove intercept
            fitted = fit_model(func, params, rate_data['xdata'])
            sse = np.sum((rate_data['ydata'] - fitted)**2)

            return sse

        results = dict()
        models = ['linear', 'hyper', 'para', 'expo']
        for func in models:
            results[func] = dict()
            res = minimize(fun=get_model_sse, x0=[0, 0, 0],
                            args=(rate_data, func),
                            method='SLSQP',
                            options={'maxiter': 1000000})

            results[func]['fitted'] = fit_model(func, res['x'], intensities)
            results[func]['sse'] = res['fun']
            results[func]['params'] = res['x']
            results[func]['stim_val'] = []
            results[func]['fitted_val'] = []

            for t in target_rating:
                loc = np.argmin(np.abs(results[func]['fitted'] - t))
                results[func]['stim_val'].append(intensities[loc])
                results[func]['fitted_val'].append(results[func]['fitted'] [loc])
        win_model = models[np.argmin([results[c]['sse'] for c in list(results.keys())])]

        results['win_model'] = win_model
        results['target_ratings'] = str(target_rating)
        results['selected_intensities'] = str(results[win_model]['stim_val'])
        results['extrapolated_ratings'] = str(results[win_model]['fitted_val'])

        # Plot
        calib_plot = plt.figure(figsize=(14, 7))
        plt.scatter(xdata, ydata, label='Actual ratings')
        plt.plot(intensities, results[win_model]['fitted'], label='Best fit', color='orange')
        plt.scatter(results[win_model]['stim_val'], results[win_model]['fitted_val'], label=win_model
                    + ' fitted values',
                    alpha=0.9, marker='^', s=60, color='orange')
        plt.plot(intensities, results['linear']['fitted'], label='Linear fit', color='green')
        plt.scatter(results['linear']['stim_val'], results['linear']['fitted_val'], label='Linearly spaced values',
                    alpha=0.5, color='green')
        plt.ylim(-1, 105)
        # plt.title(expInfo['participant'])
        plt.xlabel('Intensity (mA)')
        plt.ylabel('Rating (% max rating)')
        plt.legend()

        filenameramp = _thisDir + os.sep + u'data/%s_%s/calibration/%s_%s_%s_%s' % (expInfo['participant'], data.getDateStr(format="%Y-%m-%d"), expInfo['participant'], expName, expInfo['date'], 'fitted_values.png' )

        plt.savefig(filenameramp)


        filenameramp = _thisDir + os.sep + u'data/%s_%s/calibration/%s_%s_%s_%s' % (expInfo['participant'], data.getDateStr(format="%Y-%m-%d"), expInfo['participant'], expName, expInfo['date'], 'fitted_values.csv' )

        pd.DataFrame(results).to_csv(filenameramp)
  Routine instructions2
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    TextComponent text_5
      letterHeight = 0.032
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.3
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      text:
        Dans la première phase, vous recevrez une série de stimulations augmentant en intensité. Nous débuterons avec des stimulations très faibles (probablement non douloureuses) et l’intensité augmentera graduellement. Après chaque stimulation, vous devrez évaluer l’intensité de la douleur ressentie. Si vous n’avez pas ressenti de douleur, veuillez déplacer le curseur à l'extrémité gauche de l'échelle.

        Après chaque choc, nous vous demanderons également si vous pensez être capable de tolérer la prochaine stimulation. Si vous pensez ne pas être capable de tolérer la prochaine stimulation, nous arrêterons la série. Si vous pensez être en mesure de la tolérer, nous continuerons avec une stimulation d’une intensité plus forte. Notez que vous allez recevoir plusieurs stimulations pendant l’expérience, donc veillez à arrêter à une intensité que vous serez en mesure de tolérer plusieurs fois.

        Nous allons répéter ce processus 3 fois.

        Après cette phase, l’intensité maximale que vous aurez tolérée sera utilisée comme intensité maximale pour l’expérience au complet et vous ne recevrez jamais une stimulation excédant cette intensité.

        Dans la seconde phase, vous allez recevoir des stimulations d’intensités aléatoires sous votre niveau de tolérance et vous devrez évaluer la douleur ressentie après chaque choc.

        Appuyer sur la touche spéciale pour débuter
    KeyboardComponent key_resp_5
      allowedKeys = 'p'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instructions1
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    TextComponent text_6
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_4
      allowedKeys = 'p'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine prep
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  Routine prep_2
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    TextComponent text_7
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
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    CodeComponent set_shock
      Code Type = Py
      Begin Experiment:
        intensities_list = []*3
        ratings_list = []*3
        accept_list = []*3
        fired_list = []*3
      Begin Routine:
        # Jitter waiting
        wait1jitter = np.random.choice([2000, 2100, 2200, 2300, 2400, 2500])
        # in secs
        wait1jitter = wait1jitter/1000
        ramp_phase = 1
        # Log intensity
        Ramp.addData('wait1_dur', wait1jitter)




        # Get the intensity
        dgc['demand'] = int(shock_intensities[Ramp.thisN])
        intensity = dgc['demand']
        assert dgc['demand'] < int(expInfo['fail_ma'])

        # Set shock
        lib, _ = ds8r.init()
        result = ds8r.set_ds8r_safe(lib, dgc)


        # Log intensity
        Ramp.addData('intensity', intensity)


        if debug:
            wait_text = 'DEBUG: A shock of ' + str(dgc['demand']) + 'J would be delivered'
        else:
            wait_text = ''
  Routine compile_ramps
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    TextComponent text_10
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    CodeComponent compile
      Code Type = Py
      Begin Experiment:
        import pandas as pd
        import numpy as np
      Begin Routine:
        # Get data in a csv file
        ramp_data = {'series': series_trial,
                      'trial' : ramp_trial,
                      'intensity': intensities_list,
                      'rating': ratings_list,
                      'fired': fired_list}

        ramp_data = pd.DataFrame(data=ramp_data)

        filenameramp = _thisDir + os.sep + u'data/%s_%s/calibration/%s_%s_%s_%s' % (expInfo['participant'], data.getDateStr(format="%Y-%m-%d"), expInfo['participant'], expName, expInfo['date'], 'ramp_ratings.csv' )


        # Use only last run to get threshold and tolerance
        ramp_data_last = ramp_data[ramp_data.series==2]

        # Remove misfires
        ramp_data_last = ramp_data_last[ramp_data_last['fired'] == 1]

        # Get tolerance level and offset a bit
        tolerance = np.max(ramp_data_last.intensity)

        # Get min intensity above threshold
        ramp_data_above = ramp_data_last[ramp_data_last['rating'] > 0]
        threshold = np.min(ramp_data_above['intensity'])

        ramp_data['tolerance'] = tolerance
        ramp_data['threshold'] = threshold
        ramp_data.to_csv(filenameramp)

        # Generate  intensities from low to tolerance
        rand_intensities = np.round(np.linspace(threshold, tolerance, 14)).astype(int)
        np.random.shuffle(rand_intensities)
        fired = []
  Routine rating_scale
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    CodeComponent slidercode
      Code Type = Py
      Begin Routine:
        ratingScale = visual.RatingScale(win=win, name='ratingScale', lineColor=(255, 255, 255), low=0, high=100, precision=1, size=1, tickMarks=None, tickHeight=0, scale=None, labels=['Aucune\ndouleur', 'Pire douleur\nimaginable'], marker=visual.Rect(win, width=0.01, height=0.1, lineColor='white', fillColor='white', units='norm'), markerColor=(255, 255, 255), markerStart=0.5, textColor='white', pos=(0, 0), stretch=2, showValue=None, showAccept=None, textSize=1.2)

        pos = np.random.random()*10
        ratingScale.setMarkerPos(pos)
      Each Frame:
        inc = 0.05
        wasmoved = 0


        while True:
            keys = kb.getKeys(['n', 'm', 'space', 'escape'], waitRelease=False, clear=False)
            if keys and not keys[-1].duration:
                key = keys[-1].name
                if 'n' == key:
                    pos -= inc
                    wasmoved = 1
                if 'm' == key:
                    pos += inc
                    wasmoved = 1

                if pos > 10:
                    pos = 10
                elif pos < 0:
                    pos = 0

                # check for quit (typically the Esc key)
                if "escape" ==  key:
                    core.quit()

                if 'space' == key:
                    print(ratingScale.getRating())
                    core.wait(0.1)
                    continueRoutine=False
                    break

            #print(kb.state)
            ratingScale.setMarkerPos(pos)
            ratingScale.draw()
            main_text.draw()
            confirm_text.draw()
            win.mouseVisible = False
            win.flip()
      End Routine:
        Ramp.addData('rating', ratingScale.getRating())
Flow
