PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Data filename = u'data/%s/calibration/%s_%s' % (expInfo['participant'], expName, expInfo['date'])
  Experiment info = {'participant': 'sub-000', 'ramp_start_ma': '1.0', 'ramp_increment_ma': '1.0', 'nramps ': '3'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = 0.1 calibration_san
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine welcome
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    TextComponent textwelcome
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Bienvenue dans le programme de calibration.

        Veuillez vous assurer que le stimulateur est bien branché et ouvert.


        Une fois les vérifications faites, appuyez sur "p".
    KeyboardComponent key_resp
      allowedKeys = 'p'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent ds5_init_code
      Code Type = Auto->JS
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      Begin Experiment:
        ## Begin Experiment Code

        from pathlib import Path
        import numpy as np

        from ds5_none_uncertainty import DS5PulseConfig, fire_none_uncertainty_pulse

        def as_bool(value):
            return str(value).strip().lower() in {"1", "true", "yes", "y", "oui"}

        START_MA = float(expInfo["start_ma"])
        INCREMENT_MA = float(expInfo["increment_ma"])
        N_RAMPS = 3
        MAX_MA = 25
        MAX_STEPS = int(np.floor((MAX_MA - START_MA) / INCREMENT_MA)) + 1
        last_ramp_tolerated_ma = None
        output_dir = Path("data") / f"{expInfo['participant']}_{expInfo['date']}" / "calibration"
        ds5_config = DS5PulseConfig(
            v_per_ma=float(expInfo["v_per_ma"]),
            pulse_width_ms=float(expInfo["pulse_width_ms"]),
            pulse_frequency_hz=float(expInfo["pulse_frequency_hz"]),
            train_duration_ms=float(expInfo["train_duration_ms"]),
            record_monitor=as_bool(expInfo["record_monitor"]),
        )

        ramp_rows = []
        ramp_stop_values = []
        last_tolerated_values = []
        current_ma = START_MA
        last_tolerated = None
        ramp_step_index = 0
        ```
    CodeComponent initiation
      Code Type = Auto->JS
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      Begin Experiment:
        import random
  Routine instructions
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    TextComponent instruction_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Modify text here to comply
    KeyboardComponent exit_instr
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine fix_wait
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  Routine ramp_fix
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    TextComponent fix_ramp
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $duration_fix_ramp
      text = +
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    CodeComponent fix_ramp_dur
      Code Type = Auto->JS
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      Begin Routine:
        duration_fix_ramp = randit(2,3)
  Routine pain_send
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    TextComponent pain_fix
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text = +
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    CodeComponent pain_send_2
      Code Type = Auto->JS
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      Begin Routine:
        if ramp_steps.thisN == 0:
            current_ma = START_MA
            last_tolerated = None
            ramp_step_index = 0

        ramp_step_index += 1
        ramp_text = (
            f"Rampe {ramps_loop.thisN + 1} / {N_RAMPS}\n\n"
            f"Intensite: {current_ma:.2f} mA\n\n"
            "ESPACE = envoyer"
        )
        trial_label = f"ramp{ramps_loop.thisN + 1:02d}_step{ramp_step_index:02d}_{current_ma:.2f}mA"
      End Routine:
        metadata = fire_none_uncertainty_pulse(
            current_ma,
            ds5_config,
            output_dir=output_dir / "waveforms",
            trial_label=trial_label,
        )
        thisExp.addData("phase", "ramp")
        thisExp.addData("ramp", ramps_loop.thisN + 1)
        thisExp.addData("ramp_step", ramp_step_index)
        thisExp.addData("intensity_ma", current_ma)
        thisExp.addData("noise_condition", "none")
        for key, value in metadata.items():
            thisExp.addData(key, value)
  Routine vas_rating
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    CodeComponent slider_pain_code
      Code Type = Auto->JS
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      Begin Routine:
        slider_pain.marker = visual.Rect(win, width=0.01, height=0.1, lineColor='red', fillColor='red', units=slider_pain.units)

        for i, line in enumerate(slider_pain.tickLines.sizes):
            slider_pain.tickLines.sizes[i][1] = 0
        slider_pain.tickLines._needVertexUpdate = True
        pos = np.random.uniform(0, 100)
        slider_pain.reset()
        slider_pain.startValue = pos

        # Start a timer for max duration
        vas_timer = core.Clock()
        vas_timer.reset()
      Each Frame:
        inc = 0.75
        wasmoved = 0

        while True:
            keys = slider_pain_resp.getKeys(['n', 'm', 'space', 'escape'], waitRelease=False, clear=False)
            if keys and not keys[-1].duration:
                key = keys[-1].name
                if 'n' == key:
                    slider_pain.markerPos -= inc
                    wasmoved = 1
                if 'm' == key:
                    slider_pain.markerPos  += inc
                    wasmoved = 1

                # check for quit (typically the Esc key)
                if "escape" ==  key:
                    core.quit()

                if 'space' == key:
                    rating = slider_pain.markerPos
                    core.wait(0.1)
                    vaspressed = 1
                    thisExp.addData('VAS_rating', rating)
                    continueRoutine=False
                    break
                time_elapsed = vas_timer.getTime()  # seconds since reset
                if time_elapsed >= 10.0:  # after 10s, end routine we can change this to anything we want
                    rating = slider_pain.markerPos
                    core.wait(0.1)
                    vaspressed = 0
                    continueRoutine = False
                    break


            #print(kb.state)
            slider_pain.draw()
            main_prompt.draw()
            space_prompt.draw()
            win.mouseVisible = False
            win.flip()
    SliderComponent slider_pain
      color = White
      forceEndRoutine = True
      granularity = 0
      labels = ['Aucune\ndouleur', 'Pire douleur\nimaginable']
      letterHeight = 0.04
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = 0, 100
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    KeyboardComponent slider_pain_resp
      allowedKeys = 'n','m','enter', 'space'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent main_prompt
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text = Veuillez évaluer l'intensité de la douleur ressentie.
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    TextComponent space_prompt
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = Appuyez sur la barre d'espacement pour valider.
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  Routine continue_response
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  Routine welcome_2
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    TextComponent welcome_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        add welcome text
    KeyboardComponent welcome_end
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent ds5_initiation
      Code Type = Auto->JS
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      Before Experiment:
        from ds5_none_uncertainty import DS5PulseConfig, fire_none_uncertainty_pulse
      Begin Experiment:
        from pathlib import Path
        import numpy as np
        import pandas as pd


        def as_bool(value):
            return str(value).strip().lower() in {"1", "true", "yes", "y", "oui"}

        N_RAMPS = int(expInfo["nramps"])
        RAMP_START_MA = float(expInfo["ramp_start_ma"])
        RAMP_INCREMENT_MA = float(expInfo["ramp_increment_ma"])
        RAMP_MAX_MA = 25

        ds5_config = DS5PulseConfig(
            v_per_ma=0.4,
            pulse_width_ms=1,
            pulse_frequency_hz=100,
            train_duration_ms=500,
            record_monitor=True,
        )

        calib_dir = Path(_thisDir) / "data" / f"{expInfo['participant']}_{data.getDateStr(format='%Y-%m-%d')}" / "Calibration"
        waveform_dir = calib_dir / "ds5_waveforms"

        series_trial = []
        ramp_trial = []
        intensities_list = []
        ratings_list = []
        fired_list = []
        last_ramp_tolerated_ma = None
        ratings_random = []
        fired = 0

        # This replaces the old therm_intensity list.
        electrical_intensity = np.around(
            np.arange(RAMP_START_MA, RAMP_MAX_MA + RAMP_INCREMENT_MA / 2, RAMP_INCREMENT_MA),
            3,
        )
    CodeComponent fixed_variables
      Code Type = Auto->JS
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      Begin Experiment:
        import random
        nramps = 3
  Routine instruc
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    TextComponent explain_participant
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        add instructions here
    KeyboardComponent end_instructions
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine initiation_2
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    TextComponent verification
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Experimenter verify - zeroing + active pulse 
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    KeyboardComponent end_verification
      allowedKeys = 'p'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent reset_ma
      Code Type = Auto->JS
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      Begin Routine:
        curr_item = -1
        curr_item_loc = -1
  Routine stimulation_start
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    CodeComponent stim_start
      Code Type = Auto->JS
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      Begin Routine:
        # Update counter
        curr_item += 1

        # Get current electrical intensity in mA
        intensity = float(electrical_intensity[curr_item])
        curr_ma = intensity

        # Nothing is pre-loaded on the DS5. The waveform is generated and fired later.
        fired = 0

        # Jitter waiting
        wait1jitter = np.random.choice([2000, 2100, 2200, 2300, 2400, 2500])
        wait1jitter = wait1jitter / 1000

        # Get phase
        ramp_phase = 1

        # Optional label replacing thermode localisation
        curr_item_loc += 1
        ds5_localisation = "DS5"
      End Routine:
        ramp.addData("intensity_ma", intensity)
        ramp.addData("noise_condition", "none")
        ramp.addData("wait1_dur", wait1jitter)

        if "q" in confirm_continue.keys:
            ramp.finished = 1
    TextComponent next_stim
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Appuyer sur P pour recevoir la prochaine stimulation
    KeyboardComponent confirm_continue
      allowedKeys = 'p','n'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine jitter_cross
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    TextComponent jitter_cross_component
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $wait1jitter
      text = +
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  Routine fire_electrical
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    CodeComponent code
      Code Type = Auto->JS
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      Each Frame:
        if fired == 0 and frameN >= 1:
            fired = 1
            trial_label = (
                f"{expInfo['participant']}_ds5_calib_ramp_"
                f"{series.thisN:02d}_trial_{ramp.thisN:02d}_{intensity:.3f}mA"
            )
            ds5_metadata = fire_none_uncertainty_pulse(
                intensity_ma=intensity,
                config=ds5_config,
                output_dir=waveform_dir,
                trial_label=trial_label,
            )
      End Routine:
        thisExp.addData("ds5_fired", fired)
        thisExp.addData("noise_condition", "none")
        if fired:
            for key, value in ds5_metadata.items():
                thisExp.addData(key, value)
    TextComponent cross_fire
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text = +
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  Routine rating_scale
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    CodeComponent slider_pain_code_2
      Code Type = Auto->JS
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      Begin Routine:
        slider_pain_2.marker = visual.Rect(win, width=0.01, height=0.1, lineColor='red', fillColor='red', units=slider_pain_2.units)

        for i, line in enumerate(slider_pain_2.tickLines.sizes):
            slider_pain_2.tickLines.sizes[i][1] = 0
        slider_pain_2.tickLines._needVertexUpdate = True
        pos = np.random.uniform(0, 100)
        slider_pain_2.reset()
        slider_pain_2.startValue = pos

        # Start a timer for max duration
        vas_timer = core.Clock()
        vas_timer.reset()
      Each Frame:
        inc = 0.75
        wasmoved = 0

        while True:
            keys = slider_pain_resp_2.getKeys(['n', 'm', 'space', 'escape'], waitRelease=False, clear=False)
            if keys and not keys[-1].duration:
                key = keys[-1].name
                if 'n' == key:
                    slider_pain_2.markerPos -= inc
                    wasmoved = 1
                if 'm' == key:
                    slider_pain_2.markerPos  += inc
                    wasmoved = 1

                # check for quit (typically the Esc key)
                if "escape" ==  key:
                    core.quit()

                if 'space' == key:
                    rating = slider_pain_2.markerPos
                    ratings_list.append(rating)
                    core.wait(0.1)
                    vaspressed = 1
                    thisExp.addData('VAS_rating', rating)
                    continueRoutine=False
                    break
                time_elapsed = vas_timer.getTime()  # seconds since reset
                if time_elapsed >= 10.0:  # after 10s, end routine we can change this to anything we want
                    rating = slider_pain_2.markerPos
                    ratings_list.append(rating)
                    core.wait(0.1)
                    vaspressed = 0
                    continueRoutine = False
                    break


            #print(kb.state)
            slider_pain_2.draw()
            main_prompt_2.draw()
            space_prompt_2.draw()
            win.mouseVisible = False
            win.flip()
    SliderComponent slider_pain_2
      color = White
      forceEndRoutine = True
      granularity = 0
      labels = ['Aucune\ndouleur', 'Pire douleur\nimaginable']
      letterHeight = 0.04
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = 0, 100
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    KeyboardComponent slider_pain_resp_2
      allowedKeys = 'n','m','enter', 'space'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent main_prompt_2
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text = Veuillez évaluer l'intensité de la douleur ressentie.
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    TextComponent space_prompt_2
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = Appuyez sur la barre d'espacement pour valider.
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  Routine confirm_continue_2
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    CodeComponent confirm_code
      Code Type = Auto->JS
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      Begin Experiment:
        series_trial = []
        ramp_trial = []
        intensities_list = []
        ratings_list = []
        fired_list = []
      End Routine:
        series_trial.append(series.thisN)
        ramp_trial.append(ramp.thisN)
        intensities_list.append(float(intensity))
        fired_list.append(int(fired))
        response = confirm_resp.keys
        if isinstance(response, list):
            response = response[-1] if response else None

        # Save only the last intensity they felt under the last ramp.
        if response == "y" and series.thisN == N_RAMPS - 1 and fired == 1:
            last_ramp_tolerated_ma = float(intensity)

        if response == "n":
            ramp.finished = 1

        if float(intensity) >= RAMP_MAX_MA:
            Ramp.finished = 1

        if curr_item_loc >= 3:
            curr_item_loc = -1
    TextComponent confirm_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Pensez-vous être capable de recevoir une stimulation d'une plus grande intensité ? 
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    KeyboardComponent confirm_resp
      allowedKeys = 'y','n'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine compile_ramps
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    CodeComponent first_over_compilation
      Code Type = Auto->JS
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      Before Experiment:
        import pandas as pd
      Begin Routine:
        ramp_data = {
            "series": series_trial,
            "trial": ramp_trial,
            "intensity_ma": intensities_list,
            "rating": ratings_list,
            "fired": fired_list,
        }

        print("ramp_data is:", ramp_data)
        ramp_data = pd.DataFrame(data=ramp_data)

        calib_dir.mkdir(parents=True, exist_ok=True)
        filenameramp = calib_dir / f"{expInfo['participant']}_{expName}_{expInfo['date']}_ramp_ratings.csv"
        ramp_data.to_csv(filenameramp, index=False)

        # Use only last ramp.
        ramp_data_last = ramp_data[ramp_data.series == N_RAMPS - 1]
        ramp_data_last = ramp_data_last[ramp_data_last["fired"] == 1]

        # Tolerance/high value: last intensity they accepted in the final ramp only.
        if last_ramp_tolerated_ma is None:
            tolerance = float(np.max(ramp_data_last["intensity_ma"]))
        else:
            tolerance = float(last_ramp_tolerated_ma)

        # Threshold: first final-ramp intensity with rating > 0.
        ramp_data_above = ramp_data_last[ramp_data_last["rating"] > 0]
        if len(ramp_data_above) == 0:
            threshold = float(RAMP_START_MA)
        else:
            threshold = float(np.min(ramp_data_above["intensity_ma"]))

        ramp_data["tolerance_ma"] = tolerance
        ramp_data["threshold_ma"] = threshold
        ramp_data["last_ramp_tolerated_ma"] = last_ramp_tolerated_ma
        ramp_data.to_csv(filenameramp, index=False)

        # Generate fixed second-phase electrical intensities from threshold to tolerance.
        rand_intensities = np.around(np.linspace(threshold, tolerance, 14), 3)
        np.random.shuffle(rand_intensities)
    TextComponent first_over
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = First part over - add text
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    KeyboardComponent continue_first_over
      allowedKeys = 'p'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine second_phase_start
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    CodeComponent code_second
      Code Type = Auto->JS
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      Begin Routine:
        # Get intensities
        intensity_list = rand_intensities
        lenght = len(intensity_list)
    TextComponent second_instructions
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = add instructions seconde phase 
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    KeyboardComponent start_second_p
      allowedKeys = 'p'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trials_part_2
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    CodeComponent admin_2_start
      Code Type = Auto->JS
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      Begin Experiment:
        curr_item_scd = -1
      Begin Routine:

        # Get the intensity
        curr_item_scd += 1
        valeur_temperature = intensity_list[curr_item_scd]

        fired = 0

        trials_phase = 0
        wait1jitter = np.random.choice([2000, 2100, 2200, 2300, 2400, 2500])
        wait1jitter = wait1jitter / 1000
        trials.addData("wait1_dur", wait1jitter)


        intensity = float(intensity_list[curr_item_scd])
        curr_ma = intensity
        fired = 0

        curr_item_loc += 1
        ds5_localisation = "DS5"
      End Routine:
        trials.addData("wait1_dur", wait1jitter)
    TextComponent admnisiter_stim_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = P to get stim again - modify text her
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    KeyboardComponent admin_2
      allowedKeys = 'p'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine jitter_2
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    TextComponent jitter_fix_text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $wait1jitter
      text = +
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  Routine send_electrical_2
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    CodeComponent electrical_2
      Code Type = Auto->JS
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      Each Frame:
        if fired == 0 and frameN >= 1:
            fired = 1
            trial_label = (
                f"{expInfo['participant']}_ds5_calib_random_"
                f"{trials.thisN:02d}_{intensity:.3f}mA"
            )
            ds5_metadata = fire_none_uncertainty_pulse(
                intensity_ma=intensity,
                config=ds5_config,
                output_dir=waveform_dir,
                trial_label=trial_label,
            )
      End Routine:
        thisExp.addData("ds5_fired", fired)
        thisExp.addData("noise_condition", "none")
        if fired:
            for key, value in ds5_metadata.items():
                thisExp.addData(key, value)
    TextComponent fix_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text = +
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  Routine ratings_2
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    CodeComponent slider_pain_code_3
      Code Type = Auto->JS
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      Begin Routine:
        slider_pain_3.marker = visual.Rect(win, width=0.01, height=0.1, lineColor='red', fillColor='red', units=slider_pain_3.units)

        for i, line in enumerate(slider_pain_3.tickLines.sizes):
            slider_pain_3.tickLines.sizes[i][1] = 0
        slider_pain_3.tickLines._needVertexUpdate = True
        pos = np.random.uniform(0, 100)
        slider_pain_3.reset()
        slider_pain_3.startValue = pos

        # Start a timer for max duration
        vas_timer = core.Clock()
        vas_timer.reset()
      Each Frame:
        inc = 0.75
        wasmoved = 0

        while True:
            keys = slider_pain_resp_3.getKeys(['n', 'm', 'space', 'escape'], waitRelease=False, clear=False)
            if keys and not keys[-1].duration:
                key = keys[-1].name
                if 'n' == key:
                    slider_pain_3.markerPos -= inc
                    wasmoved = 1
                if 'm' == key:
                    slider_pain_3.markerPos  += inc
                    wasmoved = 1

                # check for quit (typically the Esc key)
                if "escape" ==  key:
                    core.quit()

                if 'space' == key:
                    rating = slider_pain_3.markerPos
                    ratings_random.append(rating)
                    core.wait(0.1)
                    vaspressed = 1
                    thisExp.addData('VAS_rating', rating)
                    continueRoutine=False
                    break
                time_elapsed = vas_timer.getTime()  # seconds since reset
                if time_elapsed >= 10.0:  # after 10s, end routine we can change this to anything we want
                    rating = slider_pain_3.markerPos
                    ratings_random.append(rating)
                    core.wait(0.1)
                    vaspressed = 0
                    continueRoutine = False
                    break


            #print(kb.state)
            slider_pain_3.draw()
            main_prompt_3.draw()
            space_prompt_3.draw()
            win.mouseVisible = False
            win.flip()
    SliderComponent slider_pain_3
      color = White
      forceEndRoutine = True
      granularity = 0
      labels = ['Aucune\ndouleur', 'Pire douleur\nimaginable']
      letterHeight = 0.04
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = 0, 100
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    KeyboardComponent slider_pain_resp_3
      allowedKeys = 'n','m','enter', 'space'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent main_prompt_3
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text = Veuillez évaluer l'intensité de la douleur ressentie.
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    TextComponent space_prompt_3
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = Appuyez sur la barre d'espacement pour valider.
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  Routine thank_you
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    CodeComponent end_code
      Code Type = Auto->JS
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      Begin Experiment:
        import pandas as pd
        import numpy as np
        import matplotlib.pyplot as plt
        from scipy.optimize import minimize
      Begin Routine:
        # Get data in a csv file
        ramp_data = {'intensity': intensity_list,
                      'rating': ratings_random}

        # Get tolerance level and offset a bit
        tolerance = np.max(intensity_list)

        # Création d'un DataFrame à partir du dictionnaire 'ramp_data'
        ramp_df = pd.DataFrame(ramp_data)
        print('ramp_df is : ', ramp_df)

        # Sélection des lignes avec un 'rating' positif
        ramp_data_above = ramp_df[ramp_df['rating'] > 0]

        # Obtenir le minimum d'intensité parmi les valeurs au-dessus du seuil
        threshold = np.min(ramp_data_above['intensity'])



        # Get min intensity above threshold
        #ramp_data_above = ramp_data[ramp_data['rating'] > 0]
        #threshold = np.min(ramp_data_above['intensity'])

        # Filtrer les données avec un rating positif
        #ramp_data_above = {
            #'intensity': [intensity for intensity, rating in zip(valeur_temperature, ratings_random) if rating > 0],
            #'rating': [rating for rating in ratings_random if rating > 0]}
      End Experiment:
        xdata = [float(i) for i in intensity_list]
        ratings_random = [float(r) for r in ratings_random]

        target_rating = [0.3, 0.6]
        target_rating = [c * 100 for c in target_rating]

        if np.max(ratings_random) > 0:
            ratings_random = [(c / np.max(ratings_random)) * 100 for c in ratings_random]
        else:
            ratings_random = [0 for c in ratings_random]

        ydata = ratings_random
        intensities = np.arange(threshold, tolerance + 0.1, 0.1)
        rate_data = pd.DataFrame()
        rate_data['ydata'] = ydata
        rate_data['xdata'] = xdata

        filenameramp_png = _thisDir + os.sep + u'data/%s_%s/Calibration/%s_%s_%s_%s' % (expInfo['participant'], data.getDateStr(format="%Y-%m-%d"), expInfo['participant'], expName, expInfo['date'], 'fitted_values.png' )
        filenameramp_csv = _thisDir + os.sep + u'data/%s_%s/Calibration/%s_%s_%s_%s' % (expInfo['participant'], data.getDateStr(format="%Y-%m-%d"), expInfo['participant'], expName, expInfo['date'], 'fitted_values.csv' )


        def fit_model(func_type, params, levels):
            return {
                #Scale down by 0.1 to prevent overflow error
                "linear" : params[0] + params[1] * levels,
                "hyper"  : params[0] + params[1]/(params[2] + levels),
                "para"   : params[0] + params[1] * levels + params[2] * (levels**2),
                "expo"   : params[0] + params[1]*(levels**params[2])
                }[func_type]

        def get_model_sse(params, rate_data, func):

            # mean center to remove intercept
            fitted = fit_model(func, params, rate_data['xdata'])
            sse = np.sum((rate_data['ydata'] - fitted)**2)

            return sse

        results = dict()
        models = ['linear', 'hyper', 'para', 'expo']
        for func in models:
            results[func] = dict()
            res = minimize(fun=get_model_sse, x0=[1, 1, 1],
                            args=(rate_data, func),
                            method='SLSQP',
                            options={'maxiter': 100})

            results[func]['fitted'] = fit_model(func, res['x'], intensities)
            results[func]['sse'] = res['fun']
            results[func]['params'] = res['x']
            results[func]['stim_val'] = []
            results[func]['fitted_val'] = []

            for t in target_rating:
                loc = np.argmin(np.abs(results[func]['fitted'] - t))
                results[func]['stim_val'].append(intensities[loc])
                results[func]['fitted_val'].append(results[func]['fitted'] [loc])
            # Save at each model in case crash
            pd.DataFrame(results).to_csv(filenameramp_csv)
            win_model = models[np.argmin([results[c]['sse'] for c in list(results.keys())])]
            results_temp = results.copy()
            results_temp['win_model'] = win_model
            results_temp['target_ratings'] = str(target_rating)
            results_temp['selected_intensities'] = str(results[win_model]['stim_val'])
            results_temp['extrapolated_ratings'] = str(results[win_model]['fitted_val'])
            pd.DataFrame(results_temp).to_csv(filenameramp_csv)
            # Plot
            calib_plot = plt.figure(figsize=(6, 5))
            plt.scatter(xdata, ydata, label='Actual ratings')
            plt.plot(intensities, results[win_model]['fitted'], label='Best fit', color='orange')
            plt.scatter(results[win_model]['stim_val'], results[win_model]['fitted_val'], label=win_model
                        + ' fitted values',
                        alpha=0.9, marker='^', s=60, color='orange')
            plt.plot(intensities, results['linear']['fitted'], label='Linear fit', color='green')
            plt.scatter(results['linear']['stim_val'], results['linear']['fitted_val'], label='Linearly spaced values',
                        alpha=0.5, color='green')
            plt.ylim(-1, 105)
            # plt.title(expInfo['participant'])
            plt.xlabel('Intensity (Celsius)')
            plt.ylabel('Rating (% max rating)')
            plt.legend()
            plt.savefig(filenameramp_png)

        win_model = models[np.argmin([results[c]['sse'] for c in list(results.keys())])]

        results['win_model'] = win_model
        results['target_ratings'] = str(target_rating)
        results['selected_intensities'] = str(results[win_model]['stim_val'])
        results['extrapolated_ratings'] = str(results[win_model]['fitted_val'])

        # Save final
        pd.DataFrame(results).to_csv(filenameramp_csv)
        # Plot
        calib_plot = plt.figure(figsize=(6, 5))
        plt.scatter(xdata, ydata, label='Actual ratings')
        plt.plot(intensities, results[win_model]['fitted'], label='Best fit', color='orange')
        plt.scatter(results[win_model]['stim_val'], results[win_model]['fitted_val'], label=win_model
                    + ' fitted values',
                    alpha=0.9, marker='^', s=60, color='orange')
        plt.plot(intensities, results['linear']['fitted'], label='Linear fit', color='green')
        plt.scatter(results['linear']['stim_val'], results['linear']['fitted_val'], label='Linearly spaced values',
                    alpha=0.5, color='green')
        plt.ylim(-1, 105)
        # plt.title(expInfo['participant'])
        plt.xlabel('Intensity (Celsius)')
        plt.ylabel('Rating (% max rating)')
        plt.legend()
        plt.savefig(filenameramp_png)
    TextComponent thank_you_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
      text = Thank you :) 
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    KeyboardComponent exit
      allowedKeys = 'p'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine welcome_2
  Routine instruc
  LoopInitiator series loopType="TrialHandler"
    loopType = random
    nReps = N_RAMPS
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    Routine initiation_2
    LoopInitiator ramp loopType="TrialHandler"
      loopType = random
      nReps = 20
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      Routine stimulation_start
      Routine jitter_cross
      Routine fire_electrical
      Routine rating_scale
      Routine confirm_continue_2
    LoopTerminator ramp
  LoopTerminator series
  Routine compile_ramps
  Routine second_phase_start
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = lenght
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    Routine trials_part_2
    Routine jitter_2
    Routine send_electrical_2
    Routine ratings_2
  LoopTerminator trials
  Routine thank_you
