PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = 999.0 piloting
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine trial
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  Routine set_up
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    CodeComponent set_up_norm
      Code Type = Auto->JS
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      Begin Experiment:
        import random
      Begin Routine:
        participant_id = expInfo['participant']
        last_three_digits = participant_id[-3:]

        #we could use last_trhee_digits to counterbalance something if we wanted to here
        from pathlib import Path

        directory = Path(__file__).parent
        conditions_dir = directory / 'condition_files'

        cond_files = conditions_dir / f'{last_three_digits}_conditions.csv'
        cond_file = str(cond_files)
    CodeComponent dsm_5_pilot
      Code Type = Auto->JS
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      Begin Experiment:
        # BEGIN EXPERIMENT CODE

        # Import
        from scipy.stats import gaussian_kde
        from scipy.signal import iirnotch, filtfilt, correlate
        import numpy as np
        import matplotlib.pyplot as plt
        import os





        # --- Fixed Parameters ---
        # Power line frequency to filter for plots. Should always be 60
        MAINS_FREQ_HZ = 60
        # Scaling in the monitoring port. Should always be 10.
        MONITOR_MA_PER_V = 10.0  # DS5 monitor output: 1V = 10 mA
        SAMPLE_RATE = 5000  # Hz (Max ompatible with NI USB-6001)


        # Try to import nidaqmx
        try:
            import nidaqmx
            from nidaqmx.constants import AcquisitionType, TerminalConfiguration
        except ImportError as exc:
            DAQ_AVAILABLE = False
            raise RuntimeError(
                "DAQ is not available: nidaqmx is not installed or NI-DAQmx drivers are missing."
            ) from exc

        print("\n=== Initializing Hardware ===")
        try:
            system = nidaqmx.system.System.local()
            devices = [d.name for d in system.devices]
            if not devices:
                raise RuntimeError("No NI DAQ devices found. Check USB connection and NI MAX.")
            DAQ_NAME = devices[0]
            if len(devices) > 1:
                print(f"Multiple devices found {devices}, using '{DAQ_NAME}'.")
            else:
                print(f"Found device: '{DAQ_NAME}'")
            DAQ_AVAILABLE = True
        except Exception as exc:
            DAQ_AVAILABLE = False
            raise RuntimeError(
                "DAQ is not available: NI-DAQmx is installed but no usable device was detected."
            ) from exc




        ###############################################################
        # --- Parameters that could change after piloting ---
        ###############################################################

        # --- Hardware Scaling (Digitimer DS5 Settings) ---
        # Set to 1.0 if DS5 dial is at +/- 10 mA (10V from DAQ = 10mA to subject)
        # Set to 0.4 if DS5 dial is at +/- 25 mA (10V from DAQ = 25mA to subject)
        # Set to 0.2 if DS5 dial is at +/- 50 mA (10V from DAQ = 50mA to subject)
        V_PER_MA = 0.4

        # Waveform Parameters ---
        PULSE_DURATION_MS = 200
        ZERO_PADDING_DURATION_MS = 50


        # Design Parameters ---
        PAIN_PROPORTIONS = {'low': 0.25, 'high': 0.75}
        # Fraction of the maximum allowed symmetric half-width used for noise spikes.
        # In compute_base_and_width():
        #   a_max = min(I_base - pain_threshold, pain_tolerance - I_base)
        #   a = NOISE_WIDTH_PROPORTION * a_max
        # Using 0.8 means noise range reaches 80% of bounds around I_base (within threshold/tolerance).
        NOISE_WIDTH_PROPORTION = 0.8
        EXTREME_FRACTION = 0.05  # 5% of noise steps will be exact MAX, 5% will be exact MIN



        # --- Participant-Specific Parameters (Calibrated per participant) ---
        PAIN_THRESHOLD = float(expInfo['threshold'])   # in mA
        PAIN_TOLERANCE = float(expInfo['tolerance'])

        # Sanity check
        assert PAIN_THRESHOLD < PAIN_TOLERANCE, "Pain threshold must be less than pain tolerance!"
        # Make sure tolerance is at least 2 mA above threshold to allow for meaningful noise manipulation
        assert PAIN_TOLERANCE - PAIN_THRESHOLD >= 2.0, "Pain tolerance must be at least 2 mA above threshold for effective noise manipulation!"
        # MAke sure scaling is not set such that we exceed DAQ limits
        max_possible_ma = PAIN_TOLERANCE + (NOISE_WIDTH_PROPORTION * (PAIN_TOLERANCE - PAIN_THRESHOLD) * 0.8)  # Max base + max noise
        max_possible_v = max_possible_ma * V_PER_MA
        if max_possible_v > 10.0:
            raise ValueError(f"With current settings, max possible voltage to subject is {max_possible_v:.2f}V, which exceeds DAQ limits. Adjust V_PER_MA or noise parameters.")


        # Plotting functions

        def _notch_filter(signal, sample_rate, freq=MAINS_FREQ_HZ, quality=10.0):
            """Applies a notch filter to remove mains interference.
            only used for plotting."""
            b, a = iirnotch(freq, quality, sample_rate)
            return filtfilt(b, a, signal)


        def _baseline_correct(recorded, sample_rate=SAMPLE_RATE, pad_ms=ZERO_PADDING_DURATION_MS):
            """Subtracts the mean of the leading zero-padding region (known 0 mA period).
            only used for plotting."""
            n_pad = int(sample_rate * pad_ms / 1000.0)
            baseline = np.mean(recorded[:n_pad])
            return recorded - baseline


        def _align_recorded(planned, recorded):
            """Shifts recorded to align with planned via cross-correlation, zero-pads the tail.
             only used for plotting."""
            corr = correlate(recorded, planned, mode='full')
            lag = np.argmax(corr) - (len(planned) - 1)
            if lag > 0:
                aligned = np.concatenate([recorded[lag:], np.zeros(lag)])
            elif lag < 0:
                aligned = np.concatenate([np.zeros(-lag), recorded[:lag]])
            else:
                aligned = recorded
            return aligned


        def compute_base_and_width(pain_threshold, pain_tolerance, intensity_condition):
            """Calculates baseline current and max allowable noise half-width."""
            if intensity_condition not in PAIN_PROPORTIONS:
                raise ValueError(
                    f"Invalid intensity_condition '{intensity_condition}'. "
                    "Expected one of: low, high."
                )
            pain_prop = PAIN_PROPORTIONS[intensity_condition]
            painful_range = pain_tolerance - pain_threshold
            I_base = pain_threshold + pain_prop * painful_range
            a_max = min(I_base - pain_threshold, pain_tolerance - I_base)
            a = NOISE_WIDTH_PROPORTION * a_max
            return I_base, a

        def generate_controlled_peak_stimulus(
            intensity_condition,
            noise_condition,
            pain_threshold=PAIN_THRESHOLD,
            pain_tolerance=PAIN_TOLERANCE,
            duration_ms=PULSE_DURATION_MS,
            sample_rate=SAMPLE_RATE,
            repeats=1 # Change to change the effective sample rate of the noise steps (e.g., 1 for 5kHz steps at 5kHz DAQ rate
        ):
            """
            Generates one condition-specific stimulus, converts it to DAQ voltage,
            and verifies safety limits.
            """
            if intensity_condition not in ("low", "high"):
                raise ValueError(
                    f"Invalid intensity_condition '{intensity_condition}'. Expected 'low' or 'high'."
                )
            if noise_condition not in ("low", "high"):
                raise ValueError(
                    f"Invalid noise_condition '{noise_condition}'. Expected 'low' or 'high'."
                )

            I_base, a = compute_base_and_width(pain_threshold, pain_tolerance, intensity_condition)

            # 1. Calculate the "Effective" Sample Rate
            repeats = 1  # Adjusted to 4 to match your docstring (4 samples @ 5kHz = 0.8ms steps)
            effective_sample_rate = sample_rate / repeats

            num_steps = int(effective_sample_rate * duration_ms / 1000.0)

            # 2. Program the exact extreme spikes
            num_extremes = int(num_steps * EXTREME_FRACTION)
            num_background = num_steps - (2 * num_extremes)

            max_spikes = np.full(num_extremes, I_base + a)
            min_spikes = np.full(num_extremes, I_base - a)

            # 3. Generate the background noise steps
            if noise_condition == 'low':
                bg_noise = np.random.normal(I_base, a * 0.1, num_background)
            else:
                bg_noise = np.random.uniform(I_base - (a * 0.95), I_base + (a * 0.95), num_background)

            bg_noise = np.clip(bg_noise, I_base - (a * 0.99), I_base + (a * 0.99))

            # 4. Combine and shuffle the unique steps
            noise_steps = np.concatenate([max_spikes, min_spikes, bg_noise])
            np.random.shuffle(noise_steps)

            # 5. Expand the steps to match the DAQ sample rate (Sample and Hold)
            noise_pulse = np.repeat(noise_steps, repeats)

            # 6. Add standard zero padding
            num_padding_samples = int(sample_rate * ZERO_PADDING_DURATION_MS / 1000.0)
            padding = np.zeros(num_padding_samples)

            waveform_ma = np.concatenate((padding, noise_pulse, padding)).astype(np.float64)

            # Convert to Voltage for the DAQ
            waveform_v = waveform_ma * V_PER_MA

            # Hardware Safety Check (NI USB-6001 hard limit is +/- 10.0V)
            max_requested_v = np.max(np.abs(waveform_v))
            if max_requested_v > 10.0:
                raise ValueError(
                    f"CRITICAL ERROR in intensity={intensity_condition}, noise={noise_condition}: "
                    f"Requested {max_requested_v:.2f}V exceeds DAQ +/- 10V limit!"
                )

            analysis = (waveform_ma, noise_pulse, I_base, a)
            return waveform_v, analysis



        def fire_and_record(
            daq_vectors_v,
            output_path,
            trial_number,
            condition_label="trial",
            DAQ_NAME=DAQ_NAME
        ):
            """
            Runs the DAQ playback and recording loop.
            Hardware-syncs the analog input (ai0) to the analog output (ao0) trigger.
            """
            recorded_data = []
            total_samples = int(SAMPLE_RATE * (PULSE_DURATION_MS + 2*ZERO_PADDING_DURATION_MS) / 1000)


            # Create TWO tasks: one for sending (AO), one for receiving (AI)
            with nidaqmx.Task() as ao_task, nidaqmx.Task() as ai_task:

                # Setup Channels
                ao_task.ao_channels.add_ao_voltage_chan(f"{DAQ_NAME}/ao0")
                ai_task.ai_channels.add_ai_voltage_chan(
                    f"{DAQ_NAME}/ai0",
                    terminal_config=TerminalConfiguration.RSE
                )

                # Setup Timing (Both run at identical rates for identical durations)
                ao_task.timing.cfg_samp_clk_timing(
                    rate=SAMPLE_RATE, sample_mode=AcquisitionType.FINITE, samps_per_chan=total_samples
                )
                ai_task.timing.cfg_samp_clk_timing(
                    rate=SAMPLE_RATE, source="OnboardClock",
                    sample_mode=AcquisitionType.FINITE, samps_per_chan=total_samples
                )

                # Pre-load output data into the DAQ buffer
                ao_task.write(daq_vectors_v, auto_start=False)

                # Start AI first so it is already listening when AO begins
                ai_task.start()
                ao_task.start()

                # 3. Wait for the physical pulse to finish
                ao_task.wait_until_done(timeout=1.0)

                # 4. Read the recorded data from the AI buffer
                trial_recording_v = ai_task.read(number_of_samples_per_channel=total_samples, timeout=2.0)
                trial_recording_v = _notch_filter(np.array(trial_recording_v), SAMPLE_RATE)
                recorded_data.append(trial_recording_v)

                # Reset task states for the next trial
                ao_task.stop()
                ai_task.stop()


            # Convert planned voltage -> mA and recorded monitor voltage -> mA
            planned_ma = np.array(daq_vectors_v) / V_PER_MA
            recorded_ma = _baseline_correct(np.array(trial_recording_v) * MONITOR_MA_PER_V)
            aligned_recorded_ma = _align_recorded(planned_ma, recorded_ma)

            # Save aligned data and plot to output path
            os.makedirs(output_path, exist_ok=True)
            safe_label = str(condition_label).replace(" ", "_")
            base_name = f"trial_{trial_number}_{safe_label}"
            csv_path = os.path.join(output_path, f"{base_name}.csv")
            png_path = os.path.join(output_path, f"{base_name}.png")
            time_ms = np.arange(total_samples) / SAMPLE_RATE * 1000
            csv_data = np.column_stack([time_ms, planned_ma, aligned_recorded_ma])
            np.savetxt(
                csv_path,
                csv_data,
                delimiter=",",
                header="time_ms,planned_ma,recorded_aligned_ma",
                comments=""
            )
            print(f"Recorded aligned waveform saved to {csv_path}")

            # Plot planned vs aligned recorded waveform
            fig, ax = plt.subplots(1, 1, figsize=(10, 4))
            ax.plot(time_ms, planned_ma, color='steelblue', linewidth=0.8, label='Planned (mA)', alpha=0.8)
            ax.plot(time_ms, aligned_recorded_ma, color='tomato', linewidth=0.8, label='Recorded aligned (mA)', alpha=0.9)
            r_val = np.corrcoef(planned_ma, aligned_recorded_ma)[0, 1]
            ax.set_title(f"{condition_label}  |  r = {r_val:.3f}")
            ax.set_xlabel("Time (ms)")
            ax.set_ylabel("Current (mA)")
            ax.legend(fontsize=8, loc='upper right')
            ax.grid(True, linestyle='--', alpha=0.5)
            plt.tight_layout()
            fig.savefig(png_path, dpi=150)
            plt.close(fig)
            print(f"Recorded aligned plot saved to {png_path}")

            return recorded_data
  Routine instructions
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    TextComponent instruct_pilot
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        You will have to the perceived pain intensity of all stimulations on the following trials

        Move the cursor on the vas using n and m

        space bar to go forward
    KeyboardComponent key_end
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine fix
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    CodeComponent fix_timer
      Code Type = Auto->JS
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      Begin Routine:
        length_fix_timer = random.randint(2, 3)
    TextComponent fix_between
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $length_fix_timer
      text [set every repeat] = +
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    CodeComponent trial_counter
      Code Type = Auto->JS
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      Begin Routine:
        trial_counter = 0
      Each Frame:
        trial_counter = trial_counter + 1
  Routine pain_stim_plus_fix
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    CodeComponent pain_stim_code
      Code Type = Auto->JS
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      Begin Routine:
        # retrieve current conditions (TO ADAPT TO THE TASK)
        noise_condition = sensory_uncertainty  # 'high' or 'low', determined by your trial sequence
        intensity_condition = stim_intensity  # 'high' or 'low', determined by your trial sequence
        trial_number = trial_counter  # Retrieve from psychopy
         # Define your output path (in subject data folder), retrieve from psychopy if needed.
         # THE DEVICE WILL RECORD THE mA AND MAKE PLOT FOR EACH TRIAL
        output_path = u'data/%s/bayes_pain/uncertainty_figs/' % (expInfo['participant'])

        # GENERATE WAVE FOR THIS CONDITION (CAN BE AT THE START OF THE TRIAL e.g. during cross)
        trial_wave_v, trial_analysis = generate_controlled_peak_stimulus(noise_condition=noise_condition, intensity_condition=intensity_condition)

        # FIRE SHOCK
        fire_and_record(trial_wave_v, output_path=output_path, trial_number=trial_number, condition_label=f"{intensity_condition}_pain_{noise_condition}_noise")
    TextComponent pain_fix_test
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = +
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  Routine vas_rating
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    CodeComponent slider_pain_code
      Code Type = Auto->JS
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      Begin Routine:
        slider_pain.marker = visual.Rect(win, width=0.01, height=0.1, lineColor='red', fillColor='red', units=slider_pain.units)

        for i, line in enumerate(slider_pain.tickLines.sizes):
            slider_pain.tickLines.sizes[i][1] = 0
        slider_pain.tickLines._needVertexUpdate = True
        pos = np.random.uniform(0, 100)
        slider_pain.reset()
        slider_pain.startValue = pos

        # Start a timer for max duration
        vas_timer = core.Clock()
        vas_timer.reset()
      Each Frame:
        inc = 0.75
        wasmoved = 0

        while True:
            keys = slider_pain_resp.getKeys(['n', 'm', 'space', 'escape'], waitRelease=False, clear=False)
            if keys and not keys[-1].duration:
                key = keys[-1].name
                if 'n' == key:
                    slider_pain.markerPos -= inc
                    wasmoved = 1
                if 'm' == key:
                    slider_pain.markerPos  += inc
                    wasmoved = 1

                # check for quit (typically the Esc key)
                if "escape" ==  key:
                    core.quit()

                if 'space' == key:
                    rating = slider_pain.markerPos
                    core.wait(0.1)
                    vaspressed = 1
                    thisExp.addData('VAS_rating', rating)
                    continueRoutine=False
                    break
                time_elapsed = vas_timer.getTime()  # seconds since reset
                if time_elapsed >= 10.0:  # after 10s, end routine we can change this to anything we want
                    rating = slider_pain.markerPos
                    core.wait(0.1)
                    vaspressed = 0
                    continueRoutine = False
                    break


            #print(kb.state)
            slider_pain.draw()
            main_prompt.draw()
            space_prompt.draw()
            win.mouseVisible = False
            win.flip()
    SliderComponent slider_pain
      color = White
      forceEndRoutine = True
      granularity = 0
      labels = ['Aucune\ndouleur', 'Pire douleur\nimaginable']
      letterHeight = 0.04
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = 0, 100
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    KeyboardComponent slider_pain_resp
      allowedKeys = 'n','m','enter', 'space'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent main_prompt
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text = Veuillez évaluer l'intensité de la douleur ressentie.
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    TextComponent space_prompt
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = Appuyez sur la barre d'espacement pour valider.
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  Routine end_exp
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    TextComponent end_exp_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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      text:
        Thank you for participating in our experiment
        The exp will close in 10 seconds, please wait

        Change this text for a custom thank you text
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine set_up
  Routine instructions
  Routine fix
  Routine pain_stim_plus_fix
  Routine vas_rating
  Routine end_exp
