PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Data filename = u'data/%s/bayes_pain/%s_%s_%s' % (expInfo['participant'], expInfo['participant'], expName, expInfo['date'])
  Experiment info = {'participant': 'sub-000'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = bayesian_san
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine trial
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  Routine set_up
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    CodeComponent set_up_2
      Code Type = Auto->JS
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      Before Experiment:
        import random
      Begin Experiment:
        participant_id = expInfo['participant']
        last_three_digits = participant_id[-3:]

        #we could use last_trhee_digits to counterbalance something if we wanted to here
        from pathlib import Path

        directory = Path(__file__).parent
        conditions_dir = directory / 'condition_files'

        cond_files = conditions_dir / f'{last_three_digits}_conditions.csv'
        cond_file = str(cond_files)
  Routine fix
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    CodeComponent fix_code_timer
      Code Type = Auto->JS
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      Begin Routine:
        length_fix_timer = random.randint(2, 3)
      End Routine:
        thisExp.addData('length_fix_timer', length_fix_timer)
    TextComponent fixation_cross
      letterHeight = 0.15
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $length_fix_timer
      text [set every repeat] = +
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  Routine vas_indicator
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    CodeComponent pain_indicator_slider
      Code Type = Auto->JS
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      Begin Routine:
        slider_pain.marker = visual.Rect(win, width=0.01, height=0.1, lineColor='red', fillColor='red', units=slider_pain.units)

        for i, line in enumerate(slider_pain.tickLines.sizes):
            slider_pain.tickLines.sizes[i][1] = 0
        slider_pain.tickLines._needVertexUpdate = True

        #we will need to dynamically set the pos of slider using expected_vas
        if expected_vas == 30:
            pos = 30
        elif expected_vas == 70 :
            pos = 70

        slider_pain.startValue = pos
        slider_pain.reset()

        # Start a timer for max duration
        vas_timer = core.Clock()
        vas_timer.reset()
      Each Frame:
        inc = 0.75
        wasmoved = 0

        while True:
            time_elapsed = vas_timer.getTime()  # seconds since reset
            if time_elapsed >= 4.0:  # we want 4 seconds of visual representation for pain
                rating = slider_pain.markerPos
                core.wait(0.1)
                vaspressed = 0
                continueRoutine = False
                break
            if expect_uncertainty == 'low':
                small_box.draw()

            elif expect_uncertainty == 'high':
                large_box.draw()

            # print(kb.state)
            slider_pain.draw()
            win.mouseVisible = False
            win.flip()
    SliderComponent slider_indicator
      color = White
      forceEndRoutine = True
      granularity = 0
      labels = ['Aucune\ndouleur', 'Pire douleur\nimaginable']
      letterHeight = 0.04
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = 0, 100
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    CodeComponent boxes_creation
      Code Type = Auto->JS
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      Before Experiment:
        from psychopy import visual, core
      Begin Routine:
        #in this experiment we will use boxes to show uncertainty
        #In this part of the set_up we will start by creating these boxes so they can be called later


        percent = pos / 100  # convert to 0–1
        slider_width = slider_pain.size[0]
        slider_left = slider_pain.pos[0] - slider_width/2

        center = slider_left + percent * slider_width

        small_box = visual.Rect(
            win=win,
            width=slider_width * 0.05,       # 5% of slider width
            height=slider_pain.size[1],      # match slider height
            pos=(center, slider_pain.pos[1]),
            lineColor='white',
            fillColor='white',
            opacity=0.5,
            units=slider_pain.units
        )

        large_box = visual.Rect(
            win=win,
            width=slider_width * 0.35,        # 35% of slider width
            height=slider_pain.size[1],       # match slider height
            pos=(center, slider_pain.pos[1]),  # vertically aligned with slider
            lineColor='white',
            fillColor='white',
            opacity=0.5,                       # semi-transparent
            units=slider_pain.units
        )
  Routine pain_fix
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    CodeComponent pain_stim_code
      Code Type = Auto->JS
      Begin Routine:
        #we will need to add the pain stim code below,
        #as of now this will be an empty code component
        #we will show a text with 'pain' to simulate and pilot
    TextComponent fake_pain
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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      text:
        pain stim goes here
        ouch
  Routine vas_rating
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    CodeComponent slider_pain_code
      Code Type = Auto->JS
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      Begin Routine:
        slider_pain.marker = visual.Rect(win, width=0.01, height=0.1, lineColor='red', fillColor='red', units=slider_pain.units)

        for i, line in enumerate(slider_pain.tickLines.sizes):
            slider_pain.tickLines.sizes[i][1] = 0
        slider_pain.tickLines._needVertexUpdate = True
        pos = np.random.uniform(0, 100)
        slider_pain.reset()
        slider_pain.startValue = pos

        # Start a timer for max duration
        vas_timer = core.Clock()
        vas_timer.reset()
      Each Frame:
        inc = 0.75
        wasmoved = 0

        while True:
            keys = slider_pain_resp.getKeys(['n', 'm', 'space', 'escape'], waitRelease=False, clear=False)
            if keys and not keys[-1].duration:
                key = keys[-1].name
                if 'n' == key:
                    slider_pain.markerPos -= inc
                    wasmoved = 1
                if 'm' == key:
                    slider_pain.markerPos  += inc
                    wasmoved = 1

                # check for quit (typically the Esc key)
                if "escape" ==  key:
                    core.quit()

                if 'space' == key:
                    rating = slider_pain.markerPos
                    core.wait(0.1)
                    vaspressed = 1
                    thisExp.addData('VAS_rating', rating)
                    continueRoutine=False
                    break
                time_elapsed = vas_timer.getTime()  # seconds since reset
                if time_elapsed >= 10.0:  # after 10s, end routine we can change this to anything we want
                    rating = slider_pain.markerPos
                    core.wait(0.1)
                    vaspressed = 0
                    continueRoutine = False
                    break


            #print(kb.state)
            slider_pain.draw()
            main_prompt.draw()
            space_prompt.draw()
            win.mouseVisible = False
            win.flip()
    SliderComponent slider_pain
      color = White
      forceEndRoutine = True
      granularity = 0
      labels = ['Aucune\ndouleur', 'Pire douleur\nimaginable']
      letterHeight = 0.04
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = 0, 100
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    KeyboardComponent slider_pain_resp
      allowedKeys = 'n','m','enter', 'space'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent main_prompt
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text = Veuillez évaluer l'intensité de la douleur ressentie.
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    TextComponent space_prompt
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = Appuyez sur la barre d'espacement pour valider.
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  Routine end_exp
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    TextComponent end_exp_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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      text:
        Thank you for participating in our experiment
        The exp will close in 10 seconds, please wait

        Change this text for a custom thank you text
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instructions
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    TextComponent instr_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Add instructions here

        press spacebar to continue
    KeyboardComponent instr_leave
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine check_up_routine
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    CodeComponent check_up_code
      Code Type = Auto->JS
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      Begin Routine:
        if check_up == 'no':
            continueRoutine = False

        answer_keys = ['n','m']

        high_key = answer_keys[0]
        low_key = answer_keys[1]


        if expect_uncertainty == 'low':
            certainty_expectation_answer = low_key
        elif expect_uncertainty == 'high' :
            certainty_expectation_answer = high_key
    TextComponent check_up_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        TEXTE SUR NIVEAU DE CONFIANCE

        n - m pour dire

        n = high confidence

        m = low confidence
    KeyboardComponent check_up_resp
      allowedKeys [set every repeat] = $answer_keys
      correctAns = $certainty_expectation_answer
      forceEndRoutine = True
      startVal [time (s)] = 0
      store = first key
      storeCorrect = True
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    TextComponent high_confidence
      letterHeight = 0.05
      pos = (1, 0)
      startVal [time (s)] = 0.0
      text [set every repeat] = Haute confiance
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    TextComponent low_confidence
      letterHeight = 0.05
      pos = (-1, 0)
      startVal [time (s)] = 0.0
      text [set every repeat] = Low confidence
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Flow
  Routine set_up
  Routine instructions
  LoopInitiator conditions_loop loopType="TrialHandler"
    conditionsFile = $cond_file
    loopType = sequential
    nReps = 1
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    Routine fix
    Routine vas_indicator
    Routine check_up_routine
    Routine pain_fix
    Routine vas_rating
  LoopTerminator conditions_loop
  Routine end_exp
